PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = visual search
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = ((random()-0.5, random()-0.5))
      startVal [time (s)] = 0.0
      text = T
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            num_distr = 10
        else:
            num_distr = 5
        thisExp.addData('num_distr', num_distr)

        distractors = []
        for i in range(num_distr):
            distr = visual.TextStim(win=win, name='distr',
                text='L',
                font='Open Sans',
                pos=(random() * 0.8 - 0.4, random() * 0.8 - 0.4),
                height=0.05)
            distractors.append(distr)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine Introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment. Here you will see multiple alphabets on the screen. Please use the mouse to click on ’T’ that appears alongside.

        Press ‘space’ to start
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thankyou
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you for your participation
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Flow
  Routine Introduction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
  Routine Thankyou
